WorkflowBuilder(Version=2.8.1)
ExternalizedMapping(TaskLogicPath, RigPath, SessionPath)
-> IncludeWorkflow(Path=Extensions\LoadSchemas.bonsai, TaskLogicPath="", RigPath="", SessionPath="")

GroupWorkflow DeserializeSchemas
    SubscribeSubject RawTaskLogicSchema
    -> AindBehaviorServices.OlfactometerCalibrationLogic.DeserializeFromJson(Type=TypeMapping<AindBehaviorServices.OlfactometerCalibrationLogic.CalibrationLogic>)
    -> AsyncSubject TaskLogicSchema
    -> MemberSelector(Selector=TaskParameters)
    -> AsyncSubject TaskLogicParameters

    SubscribeSubject RawRigSchema
    -> AindBehaviorServices.OlfactometerCalibrationRig.DeserializeFromJson(Type=TypeMapping<AindBehaviorServices.OlfactometerCalibrationRig.CalibrationRig>)
    -> Take(Count=1)
    -> AsyncSubject RigSchema

    SubscribeSubject RawSessionSchema
    -> AindBehaviorServices.AindBehaviorSession.DeserializeFromJson(Type=TypeMapping<AindBehaviorServices.AindBehaviorSession.AindBehaviorSessionModel>)
    -> Take(Count=1)
    -> AsyncSubject SessionSchema

GroupWorkflow UserInterface
    SubscribeSubject HarpAnalogInputEvents
    -> Harp.AnalogInput.Parse(Register=Harp.AnalogInput.TimestampedAnalogData)
    -> Bonsai.Design.Visualizers.RollingGraphBuilder
      IndexSelector=Seconds
      ValueSelector="Value.Channel0,Value.Channel1,Value.Channel2,Value.Channel3"
      SymbolType=None
      LineWidth=1
      Capacity=10000
      Min=nil
      Max=nil
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.Visualizers.RollingGraphVisualizer>) => #3
    SubscribeSubject SoftwareEvent
    -> VisualizerMapping(VisualizerType=TypeMapping<AllenNeuralDynamics.Core.Design.SoftwareEventVisualizer>) => #5
    BooleanProperty(Value=true)
    -> Take(Count=1) => #7
    SubscribeSubject StartExperimentTrigger
    -> BooleanProperty(Value=false)
    -> Take(Count=1) => #10
    #7, #10 -> Merge
    -> PropertyMapping(Enabled)
    -> AllenNeuralDynamics.Core.Design.PushButton(Label=Start!, Enabled=true)
    -> PublishSubject StartButton
    -> VisualizerMapping(VisualizerType=TypeMapping<AllenNeuralDynamics.Core.Design.PushButtonVisualizer>) => #15
    #3, #5, #15 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder OlfactometerCalibration(ColumnCount=1, RowCount=3, ColumnStyles="", RowStyles="", CellSpans="")
    -> WorkflowOutput

    SubscribeSubject StartButton
    -> Take(Count=1)
    -> Unit
    -> MulticastSubject StartExperimentTrigger

GroupWorkflow HarpDevices
    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=ChannelConfig)
    -> Index(Operand=StringProperty(Value=3))
    -> MemberSelector(Selector=ChannelType)
    -> Equal(Operand=WorkflowProperty<AindBehaviorServices.OlfactometerCalibrationLogic.OlfactometerChannelType>(Value=Carrier))
    -> BehaviorSubject Channel3AsCarrier

    SubscribeSubject Channel3AsCarrier
    -> PropertyMapping(Channel3AsCarrier) => #7
    SubscribeSubject RigSchema
    -> MemberSelector(Selector=HarpOlfactometer)
    -> MemberSelector(Selector=PortName)
    -> PropertyMapping(PortName) => #11
    #7, #11 -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:HarpOlfactometerDevice.bonsai, PortName=COM6, StartExperimentSubjectName=StartExperiment, Channel3AsCarrier=true)

    SubscribeSubject RigSchema
    -> MemberSelector(Selector=HarpAnalogInput)
    -> MemberSelector(Selector=PortName)
    -> PropertyMapping(PortName)
    -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:HarpAnalogInputDevice.bonsai, PortName=COMx, StartExperimentSubjectName=StartExperiment)

    SubscribeSubject RigSchema
    -> MemberSelector(Selector=HarpClockGenerator)
    -> MemberSelector(Selector=PortName)
    -> PropertyMapping(PortName)
    -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:HarpTimestampGeneratorGen3Device.bonsai, PortName=COMx, StartExperimentSubjectName=StartExperiment)

SubscribeSubject HarpAnalogInputEvents
-> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Event)
-> Harp.AnalogInput.Parse(Register=Harp.AnalogInput.TimestampedAnalogData)
-> MemberSelector(Selector=Seconds)
-> BehaviorSubject HarpTimestampSource

BehaviorSubject<System.Reactive.Unit> StartExperimentTrigger
-> PublishSubject StartLogging
-> Delay(DueTime=PT1S)
-> PublishSubject StartExperiment

GroupWorkflow Validation => #14
    SubscribeSubject Channel3AsCarrier
    -> BitwiseNot
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> AllenNeuralDynamics.Core.ThrowException(Message="Channel3 must be defined as a carrier!")

    SubscribeSubject Repository
    -> AllenNeuralDynamics.VersionControl.IsRepositoryClean(IgnoreUntracked=false)
    -> BitwiseNot => #6
    SubscribeSubject SessionSchema
    -> MemberSelector(Selector=AllowDirtyRepo) => #8
    #6, #8 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform AllowDirty?
      Expression: Item2 ? False : Item1
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> AllenNeuralDynamics.Core.ThrowException(Message="Repository is not clean! Please discard all local changes.")

    SubscribeSubject Channel3AsCarrier
    -> SelectMany SampleFlow
        SubscribeSubject StartExperiment
        -> Take(Count=1) => #1
        SubscribeSubject HarpOlfactometerEvents
        -> Harp.Olfactometer.Parse(Register=Harp.Olfactometer.TimestampedChannel3ActualFlow)
        -> MemberSelector(Selector=Value) => #4
        ExternalizedMapping(Value(DisplayName=LowFlowThreshold)) => #5
        #4, #5 -> LessThan(Operand=FloatProperty(Value=950)) => #6
        #1, #6 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> WorkflowOutput
    -> Take(Count=1)
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> AllenNeuralDynamics.Core.ThrowException(Message="Flow on Channel3 is lower than expected.")
SubscribeSubject SessionSchema
-> MemberSelector(Selector=AllowDirtyRepo)
-> BitwiseNot
-> Condition => #18
    WorkflowInput Source1
    -> WorkflowOutput
#14, #18 -> SubscribeWhen

GroupWorkflow OdorControl
    GroupWorkflow ArmOdor
        SubscribeSubject Channel3AsCarrier
        -> PropertyMapping(Channel3AsCarrier)
        -> AllenNeuralDynamics.HarpUtils.CreateOdorMix => #2
          channel3AsCarrier=true
          PercentageChannel0=0
          PercentageChannel1=0
          PercentageChannel2=0
          PercentageChannel3=NaN
          Channel3AsCarrier=true
          TargetOdorFlow=100
          TotalFlow=1000
        -> MemberSelector(Selector=ChannelsTargetFlow) => #3
        #2 -> MemberSelector(Selector=OdorValveState) => #4
        #3, #4 -> Merge
        -> MulticastSubject HarpOlfactometerCommands => #6
        SubscribeSubject HarpOlfactometerEvents => #7
        #6, #7 -> SubscribeWhen

    GroupWorkflow EndValveControl
        SubscribeSubject HarpOlfactometerEvents
        -> Take(Count=1)
        -> BooleanProperty(Value=false)
        -> BehaviorSubject OdorEndValveState

        SubscribeSubject OdorEndValveState => #4
        -> Condition OdorPath
            WorkflowInput Source1
            -> WorkflowOutput
        -> PropertySource<Harp.Olfactometer.CreateEndValvesStatePayload,Harp.Olfactometer.EndValves>(MemberName=EndValvesState, Value=EndValve0) => #6
        #4 -> BitwiseNot
        -> Condition CarrierPath
            WorkflowInput Source1
            -> WorkflowOutput
        -> PropertySource<Harp.Olfactometer.CreateEndValvesStatePayload,Harp.Olfactometer.EndValves>(MemberName=EndValvesState, Value=None) => #9
        #6, #9 -> Merge
        -> Harp.Olfactometer.Format(MessageType=Write, Register=Harp.Olfactometer.EndValveState)
        -> MulticastSubject HarpOlfactometerCommands

    GroupWorkflow InitialState

GroupWorkflow Init
    BehaviorSubject<AllenNeuralDynamics.Core.Logging.SoftwareEvent> SoftwareEvent

    SubscribeSubject SessionSchema
    -> MemberSelector(Selector=RootPath)
    -> AllenNeuralDynamics.Core.StripDirectoryPath => #3
    SubscribeSubject SessionSchema
    -> MemberSelector(Selector=Experiment)
    -> Timestamp
    -> Format(Format={0}/{1:yyyyMMddTHHmmss}, Selector="Value,Timestamp") => #7
    #3, #7 -> Zip
    -> Format(Format={0}/{1}, Selector="Item1,Item2")
    -> Take(Count=1)
    -> AsyncSubject LoggingRootPath => #11
    #11, #7 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: new(Item1 as Root, Item2 as SessionPath)
    -> Take(Count=1)
    -> AsyncSubject CompoundRootPath

    AllenNeuralDynamics.VersionControl.CreateRepository(Path=../.)
    -> AsyncSubject Repository

SubscribeSubject TaskLogicParameters
-> MemberSelector(Selector=ChannelConfig)
-> Merge
-> CreateObservable ToggleEndValves => #25
    WorkflowInput Source1
    -> MemberSelector(Selector=Key)
    -> Take(Count=1)
    -> AsyncSubject OdorChannel

    BooleanProperty(Value=false)
    -> MulticastSubject OdorEndValveState

    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=ChannelConfig) => #7
    SubscribeSubject OdorChannel
    -> PropertyMapping(Value) => #9
    #7, #9 -> Index(Operand=StringProperty(Value=1))
    -> Take(Count=1)
    -> AsyncSubject ThisOdorChannel
    -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=OdorChannel)
    -> MulticastSubject SoftwareEvent
    -> BooleanProperty(Value=true)
    -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=IsEndValveCalibration)
    -> MulticastSubject SoftwareEvent

    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=ChannelConfig) => #19
    SubscribeSubject OdorChannel
    -> PropertyMapping(Value) => #21
    #19, #21 -> Index(Operand=StringProperty(Value=1))
    -> Take(Count=1)
    -> AsyncSubject ThisOdorConfig
    -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=OdorConfig)
    -> MulticastSubject SoftwareEvent

    GroupWorkflow ArmOdor
        SubscribeSubject Channel3AsCarrier
        -> PropertyMapping(Channel3AsCarrier) => #1
        SubscribeSubject ThisOdorChannel
        -> MemberSelector(Selector=FlowRate)
        -> PropertyMapping(TargetOdorFlow) => #4
        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=FullFlowRate)
        -> PropertyMapping(TotalFlow) => #7
        SubscribeSubject OdorChannel
        -> Equal(Operand=StringProperty(Value=0))
        -> Bonsai.Scripting.Expressions.ExpressionTransform "it ? 1.0 : 0.0"
          Expression: it ? 1.0 : 0.0
        -> PropertyMapping(PercentageChannel0) => #11
        SubscribeSubject OdorChannel
        -> Equal(Operand=StringProperty(Value=1))
        -> Bonsai.Scripting.Expressions.ExpressionTransform "it ? 1.0 : 0.0"
          Expression: it ? 1.0 : 0.0
        -> PropertyMapping(PercentageChannel1) => #15
        SubscribeSubject OdorChannel
        -> Equal(Operand=StringProperty(Value=2))
        -> Bonsai.Scripting.Expressions.ExpressionTransform "it ? 1.0 : 0.0"
          Expression: it ? 1.0 : 0.0
        -> PropertyMapping(PercentageChannel2) => #19
        #1, #4, #7, #11, #15, #19 -> AllenNeuralDynamics.HarpUtils.CreateOdorMix => #20
          channel3AsCarrier=true
          PercentageChannel0=0
          PercentageChannel1=0
          PercentageChannel2=1
          PercentageChannel3=NaN
          Channel3AsCarrier=true
          TargetOdorFlow=100
          TotalFlow=500
        -> MemberSelector(Selector=ChannelsTargetFlow) => #21
        #20 -> MemberSelector(Selector=OdorValveState) => #22
        #21, #22 -> Merge
        -> MulticastSubject HarpOlfactometerCommands
        -> WorkflowOutput

    GroupWorkflow IsCarrierChannel?
        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=ChannelConfig) => #1
        SubscribeSubject OdorChannel
        -> PropertyMapping(Value) => #3
        #1, #3 -> Index(Operand=StringProperty(Value=1))
        -> MemberSelector(Selector=ChannelType)
        -> Condition IsCarrier
            WorkflowInput Source1
            -> Equal(Operand=WorkflowProperty<AindBehaviorServices.OlfactometerCalibrationLogic.OlfactometerChannelType>(Value=Carrier))
            -> WorkflowOutput
        -> WorkflowOutput
    -> BooleanProperty(Value=false) => #29
    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=TimeOff)
    -> AllenNeuralDynamics.Core.TimeSpanFromSeconds
    -> PropertyMapping(DueTime)
    -> Timer(DueTime=PT1S, Period=PT0S)
    -> BooleanProperty(Value=true)
    -> MulticastSubject OdorEndValveState => #36
    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=TimeOn)
    -> AllenNeuralDynamics.Core.TimeSpanFromSeconds
    -> PropertyMapping(DueTime) => #40
    #36, #40 -> Delay(DueTime=PT1S)
    -> BitwiseNot
    -> MulticastSubject OdorEndValveState => #43
    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=NRepeatsPerStimulus)
    -> PropertyMapping(Count) => #46
    #43, #46 -> RepeatCount(Count=10)
    -> LastOrDefault
    -> BooleanProperty(Value=true) => #49
    #29, #49 -> Merge
    -> Take(Count=1)
    -> DelaySubscription(DueTime=PT5S)
    -> WorkflowOutput
SubscribeSubject TaskLogicParameters
-> MemberSelector(Selector=ChannelConfig)
-> Merge
-> CreateObservable OpenEndValves => #29
    WorkflowInput Source1
    -> MemberSelector(Selector=Key)
    -> Take(Count=1)
    -> AsyncSubject OdorChannel

    BooleanProperty(Value=false)
    -> MulticastSubject OdorEndValveState

    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=ChannelConfig) => #7
    SubscribeSubject OdorChannel
    -> PropertyMapping(Value) => #9
    #7, #9 -> Index(Operand=StringProperty(Value=2))
    -> Take(Count=1)
    -> AsyncSubject ThisOdorChannel
    -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=OdorChannel)
    -> MulticastSubject SoftwareEvent
    -> BooleanProperty(Value=false)
    -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=IsEndValveCalibration)
    -> MulticastSubject SoftwareEvent

    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=ChannelConfig) => #19
    SubscribeSubject OdorChannel
    -> PropertyMapping(Value) => #21
    #19, #21 -> Index(Operand=StringProperty(Value=2))
    -> Take(Count=1)
    -> AsyncSubject ThisOdorConfig
    -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=OdorConfig)
    -> MulticastSubject SoftwareEvent

    Annotation TurnOffOdors(Text="")
    -> GroupWorkflow ArmOdor
        SubscribeSubject Channel3AsCarrier
        -> PropertyMapping(Channel3AsCarrier) => #1
        SubscribeSubject ThisOdorChannel
        -> MemberSelector(Selector=FlowRate)
        -> PropertyMapping(TargetOdorFlow) => #4
        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=FullFlowRate)
        -> PropertyMapping(TotalFlow) => #7
        #1, #4, #7 -> AllenNeuralDynamics.HarpUtils.CreateOdorMix => #8
          channel3AsCarrier=true
          PercentageChannel0=0
          PercentageChannel1=0
          PercentageChannel2=0
          PercentageChannel3=NaN
          Channel3AsCarrier=true
          TargetOdorFlow=100
          TotalFlow=500
        -> MemberSelector(Selector=ChannelsTargetFlow) => #9
        #8 -> MemberSelector(Selector=OdorValveState) => #10
        #9, #10 -> Merge
        -> MulticastSubject HarpOlfactometerCommands
        -> BooleanProperty(Value=true)
        -> MulticastSubject OdorEndValveState
        -> WorkflowOutput

    GroupWorkflow IsCarrierChannel?
        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=ChannelConfig) => #1
        SubscribeSubject OdorChannel
        -> PropertyMapping(Value) => #3
        #1, #3 -> Index(Operand=StringProperty(Value=1))
        -> MemberSelector(Selector=ChannelType)
        -> Condition IsCarrier
            WorkflowInput Source1
            -> Equal(Operand=WorkflowProperty<AindBehaviorServices.OlfactometerCalibrationLogic.OlfactometerChannelType>(Value=Carrier))
            -> WorkflowOutput
        -> WorkflowOutput
    -> BooleanProperty(Value=false) => #30
    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=TimeOff)
    -> AllenNeuralDynamics.Core.TimeSpanFromSeconds
    -> PropertyMapping(DueTime)
    -> Timer(DueTime=PT1S, Period=PT0S)
    -> SelectMany OpenOdor => #36
        SubscribeSubject Channel3AsCarrier
        -> PropertyMapping(Channel3AsCarrier) => #1
        SubscribeSubject ThisOdorChannel
        -> MemberSelector(Selector=FlowRate)
        -> PropertyMapping(TargetOdorFlow) => #4
        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=FullFlowRate)
        -> PropertyMapping(TotalFlow) => #7
        SubscribeSubject OdorChannel
        -> Equal(Operand=StringProperty(Value=0))
        -> Bonsai.Scripting.Expressions.ExpressionTransform "it ? 1.0 : 0.0"
          Expression: it ? 1.0 : 0.0
        -> PropertyMapping(PercentageChannel0) => #11
        SubscribeSubject OdorChannel
        -> Equal(Operand=StringProperty(Value=1))
        -> Bonsai.Scripting.Expressions.ExpressionTransform "it ? 1.0 : 0.0"
          Expression: it ? 1.0 : 0.0
        -> PropertyMapping(PercentageChannel1) => #15
        SubscribeSubject OdorChannel
        -> Equal(Operand=StringProperty(Value=2))
        -> Bonsai.Scripting.Expressions.ExpressionTransform "it ? 1.0 : 0.0"
          Expression: it ? 1.0 : 0.0
        -> PropertyMapping(PercentageChannel2) => #19
        #1, #4, #7, #11, #15, #19 -> AllenNeuralDynamics.HarpUtils.CreateOdorMix => #20
          channel3AsCarrier=true
          PercentageChannel0=0
          PercentageChannel1=1
          PercentageChannel2=0
          PercentageChannel3=NaN
          Channel3AsCarrier=true
          TargetOdorFlow=100
          TotalFlow=500
        -> MemberSelector(Selector=ChannelsTargetFlow) => #21
        #20 -> MemberSelector(Selector=OdorValveState) => #22
        #21, #22 -> Merge
        -> MulticastSubject HarpOlfactometerCommands
        -> Last
        -> WorkflowOutput
    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=TimeOn)
    -> AllenNeuralDynamics.Core.TimeSpanFromSeconds
    -> PropertyMapping(DueTime) => #40
    #36, #40 -> Delay(DueTime=PT1S)
    -> SelectMany CloseOdor => #42
        SubscribeSubject Channel3AsCarrier
        -> PropertyMapping(Channel3AsCarrier) => #1
        SubscribeSubject ThisOdorChannel
        -> MemberSelector(Selector=FlowRate)
        -> PropertyMapping(TargetOdorFlow) => #4
        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=FullFlowRate)
        -> PropertyMapping(TotalFlow) => #7
        #1, #4, #7 -> AllenNeuralDynamics.HarpUtils.CreateOdorMix => #8
          channel3AsCarrier=true
          PercentageChannel0=0
          PercentageChannel1=0
          PercentageChannel2=0
          PercentageChannel3=NaN
          Channel3AsCarrier=true
          TargetOdorFlow=100
          TotalFlow=500
        -> MemberSelector(Selector=ChannelsTargetFlow) => #9
        #8 -> MemberSelector(Selector=OdorValveState) => #10
        #9, #10 -> Merge
        -> MulticastSubject HarpOlfactometerCommands
        -> Last
        -> WorkflowOutput
    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=NRepeatsPerStimulus)
    -> PropertyMapping(Count) => #45
    #42, #45 -> RepeatCount(Count=10)
    -> LastOrDefault
    -> BooleanProperty(Value=true) => #48
    #30, #48 -> Merge
    -> Take(Count=1)
    -> DelaySubscription(DueTime=PT5S)
    -> WorkflowOutput
#25, #29 -> Concat
-> Concat
-> LastOrDefault
-> Delay(DueTime=PT5S)
-> PublishSubject EndExperiment => #34
SubscribeSubject StartExperiment => #35
#34, #35 -> SubscribeWhen

Defer Logging => #37
    GroupWorkflow HarpBoards
        SubscribeSubject HarpOlfactometerEvents
        -> Harp.Olfactometer.FilterVisibility
        -> Harp.Olfactometer.GroupByRegister => #2
        IncludeWorkflow
          Path=AllenNeuralDynamics.Core:GenerateHarpLoggingPath.bonsai
          SubjectName=LoggingRootPath
          Modality=Behavior
          LogName=Olfactometer.harp
          Extension=bin
          HarpDevice=HarpDevice
        -> PropertyMapping(FileName) => #4
        #2, #4 -> Bonsai.Harp.MessageWriter
          FileName=C:\data/672102/20240126T144845/Olfactometer.harp/Register_.bin
          Suffix=None
          Buffered=true
          Overwrite=false
          FilterType=Include
          MessageType=nil

        SubscribeSubject HarpClockGenEvents
        -> Harp.TimestampGeneratorGen3.GroupByRegister => #7
        IncludeWorkflow
          Path=AllenNeuralDynamics.Core:GenerateHarpLoggingPath.bonsai
          SubjectName=LoggingRootPath
          Modality=Behavior
          LogName=ClockGenerator.harp
          Extension=bin
          HarpDevice=HarpDevice
        -> PropertyMapping(FileName) => #9
        #7, #9 -> Bonsai.Harp.MessageWriter
          FileName=C:\data/672102/20240126T144845/ClockGenerator.harp/Register_.bin
          Suffix=None
          Buffered=true
          Overwrite=false
          FilterType=Include
          MessageType=nil

        SubscribeSubject HarpAnalogInputEvents
        -> Bonsai.Harp.FilterRegister(FilterType=Exclude, Register=Bonsai.Harp.FilterRegisterAddress(Address=15))
        -> Bonsai.Harp.GroupByRegister => #13
        IncludeWorkflow
          Path=AllenNeuralDynamics.Core:GenerateHarpLoggingPath.bonsai
          SubjectName=LoggingRootPath
          Modality=Behavior
          LogName=AnalogInput.harp
          Extension=bin
          HarpDevice=HarpDevice
        -> PropertyMapping(FileName) => #15
        #13, #15 -> Bonsai.Harp.MessageWriter => #16
          FileName=C:\data/672102/20240126T144845/AnalogInput.harp/Register_.bin
          Suffix=None
          Buffered=true
          Overwrite=false
          FilterType=Include
          MessageType=nil
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpAnalogInput)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai) => #19
        #16, #19 -> SubscribeWhen

    GroupWorkflow Logs
        SubscribeSubject EndExperiment
        -> StringProperty(Value=ExperimentCompleted)
        -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=SoftwareEvent) => #2
        SubscribeSubject HarpTimestampSource => #3
        #2, #3 -> WithLatestFrom
        -> Bonsai.Harp.CreateTimestamped
        -> AllenNeuralDynamics.Core.Logging.TimestampSoftwareEvent
        -> AllenNeuralDynamics.Core.Logging.SerializeToJson
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogDataSchema.bonsai, SubjectName=LoggingRootPath, Modality=nil, LogName=EndSession, DeviceName=config, Extension=json)

    GroupWorkflow DataSchemas
        SubscribeSubject SessionSchema
        -> GroupWorkflow ModifySchema
            WorkflowInput Source1
            -> AindBehaviorServices.AindBehaviorSession.SerializeToJson
            -> AindBehaviorServices.AindBehaviorSession.DeserializeFromJson(Type=TypeMapping<AindBehaviorServices.AindBehaviorSession.AindBehaviorSessionModel>) => #2
            SubscribeSubject Repository
            -> MemberSelector(Selector=Head.Tip.Sha) => #4
            #2, #4 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionSink AddHash
              Expression: it.Item1.set_CommitHash(it.Item2)
            -> MemberSelector(Selector=Item1)
            -> Timestamp
            -> Bonsai.Scripting.Expressions.ExpressionSink AddTimestamp
              Expression: it.Value.set_Date(it.Timestamp)
            -> MemberSelector(Selector=Value)
            -> WorkflowOutput
        -> AindBehaviorServices.AindBehaviorSession.SerializeToJson
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogDataSchema.bonsai, SubjectName=LoggingRootPath, Modality=nil, LogName=Session.json, DeviceName=Config, Extension=json)

        SubscribeSubject RigSchema
        -> AindBehaviorServices.OlfactometerCalibrationRig.SerializeToJson
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogDataSchema.bonsai, SubjectName=LoggingRootPath, Modality=nil, LogName=Rig, DeviceName=Config, Extension=json)

        SubscribeSubject TaskLogicSchema
        -> AindBehaviorServices.OlfactometerCalibrationLogic.SerializeToJson
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogDataSchema.bonsai, SubjectName=LoggingRootPath, Modality=nil, LogName=TaskLogic, DeviceName=Config, Extension=json)

        SubscribeSubject RawSessionSchema
        -> IncludeWorkflow(Path=Extensions\LogRawSchema.bonsai, SubjectName=LoggingRootPath, LogName=RawSession, DeviceName=Config, Extension=json)

        SubscribeSubject RawRigSchema
        -> IncludeWorkflow(Path=Extensions\LogRawSchema.bonsai, SubjectName=LoggingRootPath, LogName=RawRig, DeviceName=Config, Extension=json)

        SubscribeSubject RawTaskLogicSchema
        -> IncludeWorkflow(Path=Extensions\LogRawSchema.bonsai, SubjectName=LoggingRootPath, LogName=RawTaskLogic, DeviceName=Config, Extension=json)

    GroupWorkflow SoftwareEvents
        SubscribeSubject SoftwareEvent => #0
        SubscribeSubject HarpTimestampSource => #1
        #0, #1 -> WithLatestFrom
        -> Bonsai.Harp.CreateTimestamped
        -> AllenNeuralDynamics.Core.Logging.TimestampSoftwareEvent
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogSoftwareEventsDemux.bonsai, LoggerName=SoftwareEvents, SubjectName=LoggingRootPath, Modality=Behavior)
        -> WorkflowOutput
SubscribeSubject EndExperiment
-> Delay(DueTime=PT0S) => #39
#37, #39 -> TakeUntil => #40
SubscribeSubject StartLogging => #41
#40, #41 -> SubscribeWhen

SubscribeSubject EndExperiment
-> Delay(DueTime=PT2S)
-> SelectMany EndRoutine
    AllenNeuralDynamics.HarpUtils.CreateOdorMix
      channel3AsCarrier=true
      PercentageChannel0=0
      PercentageChannel1=0
      PercentageChannel2=0
      PercentageChannel3=NaN
      Channel3AsCarrier=true
      TargetOdorFlow=100
      TotalFlow=1000
    -> Take(Count=1) => #1
    -> MemberSelector(Selector=ChannelsTargetFlow) => #2
    #1 -> MemberSelector(Selector=OdorValveState) => #3
    #2, #3 -> Merge
    -> MulticastSubject HarpOlfactometerCommands
    -> Last
    -> BooleanProperty(Value=false)
    -> MulticastSubject OdorEndValveState
    -> WorkflowOutput

    SubscribeSubject LoggingRootPath
    -> PropertyMapping(Source) => #11
    SubscribeSubject SessionSchema
    -> MemberSelector(Selector=RemotePath)
    -> Condition NotNull
        WorkflowInput Source1
        -> Bonsai.Scripting.Expressions.ExpressionTransform NullOrEmpty
          Expression: String.IsNullOrEmpty(it)
        -> BitwiseNot
        -> WorkflowOutput
    -> AllenNeuralDynamics.Core.StripDirectoryPath => #15
    SubscribeSubject CompoundRootPath
    -> MemberSelector(Selector=SessionPath) => #17
    #15, #17 -> Zip
    -> Format(Format={0}/{1}, Selector="Item1, Item2")
    -> PropertyMapping(Destination) => #20
    #11, #20 -> AllenNeuralDynamics.Core.StartRobocopy(CreateLog=true, Arguments="/E /DCOPY:DAT /R:100 /W:3 /tee", ProcessWindowStyle=Normal) => #21
    SubscribeSubject SessionSchema
    -> MemberSelector(Selector=RemotePath)
    -> Condition NotNull => #24
        WorkflowInput Source1
        -> Bonsai.Scripting.Expressions.ExpressionTransform NullOrEmpty
          Expression: String.IsNullOrEmpty(it)
        -> BitwiseNot
        -> WorkflowOutput
    #21, #24 -> SubscribeWhen
-> Delay(DueTime=PT0S)
-> Take(Count=1)
-> WorkflowOutput
